PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000,700]
  expName = Tutorial_2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random()>0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random()>0.5:
                tilt = 0;
                corrAns = 'up'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random()>0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random()>0.5:
                tilt = 0;
                corrAns = 'up'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
